PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [720, 600]
  expName = Exercise_for_hcy
  keyboardBackend = ioHub
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Routines
  Routine WelcomeScreen
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    TextComponent text_welcome
      font = Arial Unicode MS
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 欢迎来到试验！
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  Routine Q1
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    TextComponent text_Q1
      font = Arial Unicode MS
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = 你认为大众眼中的抑郁症患者是怎样的？
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  Routine Goodbye
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    TextComponent text_goodbye
      font = Arial Unicode MS
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = 谢谢你的参与！
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  Routine Instruction
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    TextComponent text_Instruction
      font = Arial Unicode MS
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        请就问题给出你的答案
        如果倾向左边选项，按下a键
        如果倾向右边选项，按下l键
        如果你准备好了，请按下空格键
    KeyboardComponent key_resp_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Blank
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    TextComponent text_blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine Q2
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    TextComponent text_Q2
      font = Arial Unicode MS
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = 你自己所认为的抑郁症患者是怎样的？
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  Routine Answer01
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    TextComponent text_Answer01
      font = Arial Unicode MS
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = 焦虑的        抑郁的
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    KeyboardComponent key_resp_answer01
      allowedKeys = 'a','l',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Answer02
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    TextComponent text_answer02
      font = Arial Unicode MS
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = 焦虑的       抑郁的
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    KeyboardComponent key_resp_answer02
      allowedKeys = 'a','l',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine WelcomeScreen
  Routine Instruction
  Routine Blank
  Routine Q1
  Routine Answer01
  Routine Blank
  Routine Q2
  Routine Answer02
  Routine Goodbye
